PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 800]
  expName = b0_1
  keyboardBackend = PsychToolbox
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Routines
  Routine fixate
    PolygonComponent fixation_fixate_circle
      fillColor = black
      lineColor = black
      lineWidth = 0
      shape = circle
      size = (1.0, 1.0)
      startVal [time (s)] = 0.7
      units = deg
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    PolygonComponent fixation_fixate
      fillColor = grey
      lineColor = grey
      lineWidth = 0.25
      shape = cross
      size = (1.0, 1.0)
      startVal [time (s)] = 0.7
      units = deg
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    PolygonComponent fixation_fixate_dot
      fillColor = black
      lineColor = black
      lineWidth = 0
      shape = circle
      size = (0.18, 0.18)
      startVal [time (s)] = 0.7
      units = deg
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    KeyboardComponent fixation_placeholder
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.7 
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  Routine question
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        thisTrialDuration = [3, 6, 9, 12][randint(0,4)]
        thisExp.addData('wait_duration', thisTrialDuration)
    PolygonComponent fixation_prepare
      fillColor = black
      lineColor = black
      ori = 45
      shape = cross
      size = (1.0, 1.0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
      units = deg
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    PolygonComponent fixation_question
      fillColor = black
      lineColor = black
      shape = cross
      size = (1.0, 1.0)
      startVal [time (s)] = 2.0
      units = deg
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    StaticComponent static_prepare
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    SoundComponent question_voice
      durationEstim = 3
      sound [set during: question.static_prepare] = $'stimuli/' + question_file
      startVal [time (s)] = 2.0
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    SoundComponent duration_voice
      durationEstim = 1
      sound [set during: question.static_prepare] = $'stimuli/' + str(thisTrialDuration) + 's.ogg'
      startEstim = 5.2
      startVal [time (s)] = $2.0 + question_voice.duration + 0.2
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    KeyboardComponent choice
      allowedKeys = 'd','g','j'
      forceEndRoutine = True
      startEstim = 5.7
      startVal [time (s)] = $2.0 + question_voice.duration + duration_voice.duration / 2
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  Routine answer
    CodeComponent conditional_answer
      Code Type = Auto->JS
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      Begin Routine:
        if choice.keys != 'd':
            continueRoutine = False
    PolygonComponent fixation_wait
      durationEstim = 2
      fillColor = green
      lineColor = green
      ori = 45
      shape = cross
      size = (1.0, 1.0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $thisTrialDuration
      units = deg
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    PolygonComponent fixation_answer
      durationEstim = 0.7
      fillColor = red
      lineColor = red
      shape = cross
      size = (1.0, 1.0)
      startEstim = 2
      startVal [time (s)] = $thisTrialDuration
      stopVal [time (s)] = $thisTrialDuration + answer_voice.duration
      units = deg
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    SoundComponent answer_voice
      durationEstim = 0.7
      sound [set during: answer.static_wait] = $'./stimuli/' + answer_file
      startEstim = 2
      startVal [time (s)] = $thisTrialDuration
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    PolygonComponent fixation_satisfaction
      fillColor = blue
      lineColor = blue
      ori = 45
      shape = cross
      size = (1.0, 1.0)
      startEstim = 2.7
      startVal [time (s)] = $thisTrialDuration + answer_voice.duration
      stopVal [duration (s)] = 3.0
      units = deg
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    MicrophoneComponent mic
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startEstim = 2.7
      startVal [time (s)] = $thisTrialDuration + answer_voice.duration
      stopVal [duration (s)] = 3.0
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      transcribeWords = 'one', 'two', 'three', 'four', 'five'
      trimSilent = False
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    StaticComponent static_wait
      durationEstim = 2
      startVal [time (s)] = 0
      stopVal [duration (s)] = $thisTrialDuration
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  Routine waiting_instructions
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rating
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"How curious are you to know: \n" + question_text
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = ("Know", "1", "2", "3", "4", "5")
      letterHeight = 1.0
      pos = (0, -3.4)
      size = (12.0, 1.0)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5)
      units = deg
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Flow
  Routine waiting_instructions
  LoopInitiator waiting_trials loopType="TrialHandler"
    conditionsFile = stimuli/questions.csv
    loopType = random
    nReps = 1
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    conditions:
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      OrderedDict([('questionId', 'FO_70'), ('type', 'Food'), ('question', 'Mozzarella cheese is traditionally made from the milk of what animal?'), ('answer', 'Water buffalo'), ('question_file', 'FO_02_q.ogg'), ('answer_file', 'FO_02_a.ogg')]),
      OrderedDict([('questionId', 'FO_71'), ('type', 'Food'), ('question', 'Where were French fries first invented?'), ('answer', 'Belgium'), ('question_file', 'FO_01_q.ogg'), ('answer_file', 'FO_01_a.ogg')]),
      OrderedDict([('questionId', 'FO_72'), ('type', 'Food'), ('question', 'Which famous American beverage was first invented in 1886?'), ('answer', 'Coca-cola'), ('question_file', 'FO_02_q.ogg'), ('answer_file', 'FO_02_a.ogg')]),
      OrderedDict([('questionId', 'FO_73'), ('type', 'Food'), ('question', 'Which food considered a delicacy today, was once a working class food?'), ('answer', 'Lobster'), ('question_file', 'FO_01_q.ogg'), ('answer_file', 'FO_01_a.ogg')]),
      OrderedDict([('questionId', 'FO_74'), ('type', 'Food'), ('question', 'Which fruit has the richest source of antioxidants?'), ('answer', 'Blueberries'), ('question_file', 'FO_02_q.ogg'), ('answer_file', 'FO_02_a.ogg')]),
      OrderedDict([('questionId', 'FO_75'), ('type', 'Food'), ('question', 'Mace grows around the outside of which fruit?'), ('answer', 'Nutmeg'), ('question_file', 'FO_01_q.ogg'), ('answer_file', 'FO_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_01'), ('type', 'Geography'), ('question', 'Which country has the most caves in the world?'), ('answer', 'Slovakia'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_02'), ('type', 'Geography'), ('question', 'About half of the population of what Pacific island has the surname Christian?'), ('answer', 'Pitcairn Island'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_03'), ('type', 'Geography'), ('question', "Thimpu, the world's only capital city with no traffic lights, is the capital of what tiny kingdom?"), ('answer', 'Bhutan'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_04'), ('type', 'Geography'), ('question', 'What is the least densely populated territory in the world?'), ('answer', 'Greenland'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_05'), ('type', 'Geography'), ('question', 'What US state advertised "The Greatest Snow on Earth" on its license plates?'), ('answer', 'Utah'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_06'), ('type', 'Geography'), ('question', "What's the most populous city in the Southern Hemisphere?"), ('answer', 'Sao Paulo'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_07'), ('type', 'Geography'), ('question', 'The first suburban shopping center in the U.S. was established in what city?'), ('answer', 'Kansas City'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_08'), ('type', 'Geography'), ('question', 'Which is the only US state that has a pennant-shaped flag instead of a rectangular one?'), ('answer', 'Ohio'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_09'), ('type', 'Geography'), ('question', 'On what namesake Asian island are the first Homo erectus fossils found?'), ('answer', 'Java'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_10'), ('type', 'Geography'), ('question', 'In which country is it most common for divers to be attacked by sharks?'), ('answer', 'United States'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_11'), ('type', 'Geography'), ('question', "What port, its state's largest city, is nicknamed the Brick City?"), ('answer', 'Newark, NJ'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_12'), ('type', 'Geography'), ('question', "Which country's terrain is one of the lowest in the world, and is threatened by the global sea level rise?"), ('answer', 'The Maldives'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_13'), ('type', 'Geography'), ('question', 'What EU nation was once led by a president and a prime minister who were identical twins?'), ('answer', 'Poland'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_14'), ('type', 'Geography'), ('question', 'Of all the countries named for a person, which country is named for the person who lived most recently?'), ('answer', 'Bolivia'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_15'), ('type', 'Geography'), ('question', 'What is the highest peak of the Andes Mountains called?'), ('answer', 'Mount Aconcagua'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_16'), ('type', 'Geography'), ('question', 'What state\'s motto is "friendship" since that\'s supposed to have been the meaning of the state\'s Caddo Indian name?'), ('answer', 'Texas'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_17'), ('type', 'Geography'), ('question', 'In what state were "My Governor Can Beat Up Your Governor" bumper stickers popular beginning in 1998?'), ('answer', 'Minnesota'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_18'), ('type', 'Geography'), ('question', 'Until 2007, what was the only country in the world not to have registered it\'s own internet domain suffix, ".kp"?'), ('answer', 'North Korea'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_19'), ('type', 'Geography'), ('question', "Less than 0.5% of Earth's fresh water is held in what naturally occuring flowing watercourse?"), ('answer', 'Rivers'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_20'), ('type', 'Geography'), ('question', 'What is sinology the study of?'), ('answer', 'China'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_21'), ('type', 'Geography'), ('question', 'What river runs through Dublin?'), ('answer', 'Liffey'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_22'), ('type', 'Geography'), ('question', 'The point on land closest to the North Pole belongs to what nation?'), ('answer', 'Denmark'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_23'), ('type', 'Geography'), ('question', 'What U.S. state has the slogan "Native America" on its license plates?'), ('answer', 'Oklahoma'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_24'), ('type', 'Geography'), ('question', 'What Blue Ridge peak in North Carolina is the highest point east of the Mississippi?'), ('answer', 'Mount Mitchell'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_25'), ('type', 'Geography'), ('question', "The former penal colony of Devil's Island is located off the coast of what country?"), ('answer', 'French Guiana'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_26'), ('type', 'Geography'), ('question', 'What African country is the only member of the Commonwealth of Nations that was never part of the British Empire?'), ('answer', 'Mozambique'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_27'), ('type', 'Geography'), ('question', "What's the second most populated continent on Earth?"), ('answer', 'Africa'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_28'), ('type', 'Geography'), ('question', 'What river runs through Melbourne?'), ('answer', 'Yarra'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_29'), ('type', 'Geography'), ('question', 'In which city were the 1982 Commonwealth Games hosted?'), ('answer', 'Brisbane'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_30'), ('type', 'Geography'), ('question', 'What is the smallest country in Africa?'), ('answer', 'The Gambia'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_31'), ('type', 'Geography'), ('question', "Of the world's seven most populous islands, what's the only one not in Asia?"), ('answer', 'Great Britain'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_32'), ('type', 'Geography'), ('question', 'What Ukrainian city hosted the last World War II summit of the "Big Three"?'), ('answer', 'Yalta'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_33'), ('type', 'Geography'), ('question', 'Excepting Alaska and Louisiana, what US state is divided into the fewest counties, with only three?'), ('answer', 'Delaware'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_34'), ('type', 'Geography'), ('question', 'What Pacific inlet was called "Stingray Bay" until Captain Cook renamed it for "the great quantity of plants" his scientists had discovered?'), ('answer', 'Botany Bay'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_35'), ('type', 'Geography'), ('question', 'In which country would you find the mouth of the Rhine River?'), ('answer', 'The Netherlands'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_36'), ('type', 'Geography'), ('question', 'In which city was Bob Crane killed?'), ('answer', 'Scottsdale, Arizona'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_37'), ('type', 'Geography'), ('question', "What's the US island with the largest population?"), ('answer', 'Long Island'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_38'), ('type', 'Geography'), ('question', "What country borders both of the world's only two nations with square flags?"), ('answer', 'Italy'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_39'), ('type', 'Geography'), ('question', 'What state depicts Delicate Arch on its license plates?'), ('answer', 'Utah'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_40'), ('type', 'Geography'), ('question', "What was the world's most populous city before Tokyo surpassed it in the 1960s?"), ('answer', 'New York City'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_41'), ('type', 'Geography'), ('question', "Three-fourths of Western Australia's population lives in what city?"), ('answer', 'Perth'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_42'), ('type', 'Geography'), ('question', 'What African capital city is named after a U.S. president?'), ('answer', 'Monrovia'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_43'), ('type', 'Geography'), ('question', 'Where is the longest suspension bridge?'), ('answer', 'Japan'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_44'), ('type', 'Geography'), ('question', 'What river runs through Boston?'), ('answer', 'Charles'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_45'), ('type', 'Geography'), ('question', 'Which ocean is the smallest of them all?'), ('answer', 'Arctic Ocean'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_46'), ('type', 'Geography'), ('question', 'Why is Oneida Lake, near Syracuse, New York, sometimes called "the thumb"?'), ('answer', 'It sits beside the Finger Lakes'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_47'), ('type', 'Geography'), ('question', 'What nation is home to the only tunnel in the world longer than the Channel?'), ('answer', 'Japan'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_48'), ('type', 'Geography'), ('question', "What city's harbor is overlooked by Victoria Peak?"), ('answer', 'Hong Kong'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_49'), ('type', 'Geography'), ('question', 'What desert is home to the Ahaggar and Tibesti Mountains?'), ('answer', 'Sahara'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
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    Routine fixate
    Routine question
    Routine answer
  LoopTerminator waiting_trials
  LoopInitiator rating_trials loopType="TrialHandler"
    conditionsFile = stimuli/questions.csv
    loopType = random
    nReps = 1
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    conditions:
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      OrderedDict([('questionId', 'FO_70'), ('type', 'Food'), ('question_text', 'Mozzarella cheese is traditionally made from the milk of what animal?'), ('answer_text', 'Water buffalo'), ('question_file', 'FO_02_q.ogg'), ('answer_file', 'FO_02_a.ogg')]),
      OrderedDict([('questionId', 'FO_71'), ('type', 'Food'), ('question_text', 'Where were French fries first invented?'), ('answer_text', 'Belgium'), ('question_file', 'FO_01_q.ogg'), ('answer_file', 'FO_01_a.ogg')]),
      OrderedDict([('questionId', 'FO_72'), ('type', 'Food'), ('question_text', 'Which famous American beverage was first invented in 1886?'), ('answer_text', 'Coca-cola'), ('question_file', 'FO_02_q.ogg'), ('answer_file', 'FO_02_a.ogg')]),
      OrderedDict([('questionId', 'FO_73'), ('type', 'Food'), ('question_text', 'Which food considered a delicacy today, was once a working class food?'), ('answer_text', 'Lobster'), ('question_file', 'FO_01_q.ogg'), ('answer_file', 'FO_01_a.ogg')]),
      OrderedDict([('questionId', 'FO_74'), ('type', 'Food'), ('question_text', 'Which fruit has the richest source of antioxidants?'), ('answer_text', 'Blueberries'), ('question_file', 'FO_02_q.ogg'), ('answer_file', 'FO_02_a.ogg')]),
      OrderedDict([('questionId', 'FO_75'), ('type', 'Food'), ('question_text', 'Mace grows around the outside of which fruit?'), ('answer_text', 'Nutmeg'), ('question_file', 'FO_01_q.ogg'), ('answer_file', 'FO_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_01'), ('type', 'Geography'), ('question_text', 'Which country has the most caves in the world?'), ('answer_text', 'Slovakia'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_02'), ('type', 'Geography'), ('question_text', 'About half of the population of what Pacific island has the surname Christian?'), ('answer_text', 'Pitcairn Island'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_03'), ('type', 'Geography'), ('question_text', "Thimpu, the world's only capital city with no traffic lights, is the capital of what tiny kingdom?"), ('answer_text', 'Bhutan'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_04'), ('type', 'Geography'), ('question_text', 'What is the least densely populated territory in the world?'), ('answer_text', 'Greenland'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_05'), ('type', 'Geography'), ('question_text', 'What US state advertised "The Greatest Snow on Earth" on its license plates?'), ('answer_text', 'Utah'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_06'), ('type', 'Geography'), ('question_text', "What's the most populous city in the Southern Hemisphere?"), ('answer_text', 'Sao Paulo'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_07'), ('type', 'Geography'), ('question_text', 'The first suburban shopping center in the U.S. was established in what city?'), ('answer_text', 'Kansas City'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_08'), ('type', 'Geography'), ('question_text', 'Which is the only US state that has a pennant-shaped flag instead of a rectangular one?'), ('answer_text', 'Ohio'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_09'), ('type', 'Geography'), ('question_text', 'On what namesake Asian island are the first Homo erectus fossils found?'), ('answer_text', 'Java'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_10'), ('type', 'Geography'), ('question_text', 'In which country is it most common for divers to be attacked by sharks?'), ('answer_text', 'United States'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_11'), ('type', 'Geography'), ('question_text', "What port, its state's largest city, is nicknamed the Brick City?"), ('answer_text', 'Newark, NJ'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_12'), ('type', 'Geography'), ('question_text', "Which country's terrain is one of the lowest in the world, and is threatened by the global sea level rise?"), ('answer_text', 'The Maldives'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_13'), ('type', 'Geography'), ('question_text', 'What EU nation was once led by a president and a prime minister who were identical twins?'), ('answer_text', 'Poland'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_14'), ('type', 'Geography'), ('question_text', 'Of all the countries named for a person, which country is named for the person who lived most recently?'), ('answer_text', 'Bolivia'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_15'), ('type', 'Geography'), ('question_text', 'What is the highest peak of the Andes Mountains called?'), ('answer_text', 'Mount Aconcagua'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_16'), ('type', 'Geography'), ('question_text', 'What state\'s motto is "friendship" since that\'s supposed to have been the meaning of the state\'s Caddo Indian name?'), ('answer_text', 'Texas'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_17'), ('type', 'Geography'), ('question_text', 'In what state were "My Governor Can Beat Up Your Governor" bumper stickers popular beginning in 1998?'), ('answer_text', 'Minnesota'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_18'), ('type', 'Geography'), ('question_text', 'Until 2007, what was the only country in the world not to have registered it\'s own internet domain suffix, ".kp"?'), ('answer_text', 'North Korea'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_19'), ('type', 'Geography'), ('question_text', "Less than 0.5% of Earth's fresh water is held in what naturally occuring flowing watercourse?"), ('answer_text', 'Rivers'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_20'), ('type', 'Geography'), ('question_text', 'What is sinology the study of?'), ('answer_text', 'China'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_21'), ('type', 'Geography'), ('question_text', 'What river runs through Dublin?'), ('answer_text', 'Liffey'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_22'), ('type', 'Geography'), ('question_text', 'The point on land closest to the North Pole belongs to what nation?'), ('answer_text', 'Denmark'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_23'), ('type', 'Geography'), ('question_text', 'What U.S. state has the slogan "Native America" on its license plates?'), ('answer_text', 'Oklahoma'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_24'), ('type', 'Geography'), ('question_text', 'What Blue Ridge peak in North Carolina is the highest point east of the Mississippi?'), ('answer_text', 'Mount Mitchell'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_25'), ('type', 'Geography'), ('question_text', "The former penal colony of Devil's Island is located off the coast of what country?"), ('answer_text', 'French Guiana'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_26'), ('type', 'Geography'), ('question_text', 'What African country is the only member of the Commonwealth of Nations that was never part of the British Empire?'), ('answer_text', 'Mozambique'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_27'), ('type', 'Geography'), ('question_text', "What's the second most populated continent on Earth?"), ('answer_text', 'Africa'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_28'), ('type', 'Geography'), ('question_text', 'What river runs through Melbourne?'), ('answer_text', 'Yarra'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_29'), ('type', 'Geography'), ('question_text', 'In which city were the 1982 Commonwealth Games hosted?'), ('answer_text', 'Brisbane'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_30'), ('type', 'Geography'), ('question_text', 'What is the smallest country in Africa?'), ('answer_text', 'The Gambia'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_31'), ('type', 'Geography'), ('question_text', "Of the world's seven most populous islands, what's the only one not in Asia?"), ('answer_text', 'Great Britain'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_32'), ('type', 'Geography'), ('question_text', 'What Ukrainian city hosted the last World War II summit of the "Big Three"?'), ('answer_text', 'Yalta'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_33'), ('type', 'Geography'), ('question_text', 'Excepting Alaska and Louisiana, what US state is divided into the fewest counties, with only three?'), ('answer_text', 'Delaware'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_34'), ('type', 'Geography'), ('question_text', 'What Pacific inlet was called "Stingray Bay" until Captain Cook renamed it for "the great quantity of plants" his scientists had discovered?'), ('answer_text', 'Botany Bay'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_35'), ('type', 'Geography'), ('question_text', 'In which country would you find the mouth of the Rhine River?'), ('answer_text', 'The Netherlands'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_36'), ('type', 'Geography'), ('question_text', 'In which city was Bob Crane killed?'), ('answer_text', 'Scottsdale, Arizona'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_37'), ('type', 'Geography'), ('question_text', "What's the US island with the largest population?"), ('answer_text', 'Long Island'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_38'), ('type', 'Geography'), ('question_text', "What country borders both of the world's only two nations with square flags?"), ('answer_text', 'Italy'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_39'), ('type', 'Geography'), ('question_text', 'What state depicts Delicate Arch on its license plates?'), ('answer_text', 'Utah'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_40'), ('type', 'Geography'), ('question_text', "What was the world's most populous city before Tokyo surpassed it in the 1960s?"), ('answer_text', 'New York City'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_41'), ('type', 'Geography'), ('question_text', "Three-fourths of Western Australia's population lives in what city?"), ('answer_text', 'Perth'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_42'), ('type', 'Geography'), ('question_text', 'What African capital city is named after a U.S. president?'), ('answer_text', 'Monrovia'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_43'), ('type', 'Geography'), ('question_text', 'Where is the longest suspension bridge?'), ('answer_text', 'Japan'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_44'), ('type', 'Geography'), ('question_text', 'What river runs through Boston?'), ('answer_text', 'Charles'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_45'), ('type', 'Geography'), ('question_text', 'Which ocean is the smallest of them all?'), ('answer_text', 'Arctic Ocean'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_46'), ('type', 'Geography'), ('question_text', 'Why is Oneida Lake, near Syracuse, New York, sometimes called "the thumb"?'), ('answer_text', 'It sits beside the Finger Lakes'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_47'), ('type', 'Geography'), ('question_text', 'What nation is home to the only tunnel in the world longer than the Channel?'), ('answer_text', 'Japan'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
      OrderedDict([('questionId', 'GE_48'), ('type', 'Geography'), ('question_text', "What city's harbor is overlooked by Victoria Peak?"), ('answer_text', 'Hong Kong'), ('question_file', 'GE_02_q.ogg'), ('answer_file', 'GE_02_a.ogg')]),
      OrderedDict([('questionId', 'GE_49'), ('type', 'Geography'), ('question_text', 'What desert is home to the Ahaggar and Tibesti Mountains?'), ('answer_text', 'Sahara'), ('question_file', 'GE_01_q.ogg'), ('answer_file', 'GE_01_a.ogg')]),
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    Routine rating
  LoopTerminator rating_trials
